PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Show info dlg = False
  Units = height
  Window size (pixels) = [1400, 700]
  expName = solo_project without sound
  keyboardBackend = ioHub
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Routines
  Routine trial
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    ImageComponent cue
      image [set every repeat] = $cue_image
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 0.5
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    ImageComponent target
      image = Target.png
      pos [set every repeat] = (target_pos, 0)
      size = (0.3, 0.3)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 1.3
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    MouseComponent mouse_resp
      clickable = target
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.5
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  Routine start
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Welcome !

        Focus your attention on the screen and try to minimize distractions.

        In this task you have to click on the target.

        Press space bar to start !
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine the_end
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Thank you for participating !

        Enter space to end the trial.
    KeyboardComponent key_resp_2
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine start
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = Cond_solo.xlsx
    loopType = fullRandom
    nReps = 10
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    conditions:
      [{'cue_image': 'C:\\Users\\HP\\OneDrive\\Documents\\Psyco py\\solo\\Arrow_Right.png', 'target_pos': -0.5, 'then_valid': 'valid'},
      {'cue_image': 'C:\\Users\\HP\\OneDrive\\Documents\\Psyco py\\solo\\Arrow_Right.png', 'target_pos': -0.5, 'then_valid': 'valid'},
      {'cue_image': 'C:\\Users\\HP\\OneDrive\\Documents\\Psyco py\\solo\\Arrow_Right.png', 'target_pos': -0.5, 'then_valid': 'valid'},
      {'cue_image': 'C:\\Users\\HP\\OneDrive\\Documents\\Psyco py\\solo\\Arrow_left.png', 'target_pos': 0.5, 'then_valid': 'valid'},
      {'cue_image': 'C:\\Users\\HP\\OneDrive\\Documents\\Psyco py\\solo\\Arrow_left.png', 'target_pos': 0.5, 'then_valid': 'valid'},
      {'cue_image': 'C:\\Users\\HP\\OneDrive\\Documents\\Psyco py\\solo\\Arrow_left.png', 'target_pos': 0.5, 'then_valid': 'valid'},
      {'cue_image': 'C:\\Users\\HP\\OneDrive\\Documents\\Psyco py\\solo\\Arrow_Right.png', 'target_pos': 0.5, 'then_valid': 'invalid'},
      {'cue_image': 'C:\\Users\\HP\\OneDrive\\Documents\\Psyco py\\solo\\Arrow_left.png', 'target_pos': -0.5, 'then_valid': 'invalid'},
      {'cue_image': 'C:\\Users\\HP\\OneDrive\\Documents\\Psyco py\\solo\\Arrow_Right.png', 'target_pos': 0.5, 'then_valid': 'invalid'},
      {'cue_image': 'C:\\Users\\HP\\OneDrive\\Documents\\Psyco py\\solo\\Arrow_left.png', 'target_pos': -0.5, 'then_valid': 'invalid'}]
    Routine trial
  LoopTerminator trials
  Routine the_end
